PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Main
  keyboardBackend = ioHub
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Routines
  Routine Welcome_message
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Welcome !
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  Routine Instructions
    CodeComponent Port_set
      Code Type = Auto->JS
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      Before Experiment:
        import numpy as np
        import serial
        import os
        from datetime import datetime
        # open serial port
        # revise the port here
        # port = serial.Serial('/dev/cu.usbserial-2120', 115200)
        portecg = serial.Serial('COM3', 115200)
        # port: the variable defined abolve
        # desc: the description of the event
        def event(port, desc, timestamp):
        #    win.callOnFlip(port.write, str.encode('1'))
            thisExp.addData(desc, timestamp)
      End Experiment:
        portecg.close()
    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_instr
      font = Comic Sans
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 19
      text = $"For this experiment you are asked to press" + " \n bar space when you feel certain time has elapsed" + "\n The target time is gonna be shown in the screen and  " + " \n the time will start to run since the moment you press bar space as well" + "\n i addition to this, you`ll have to do a stroop task"
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    CodeComponent porteeg
      Code Type = Auto->JS
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      Before Experiment:
        import argparse
        import serial
        import time

        class LabHackers:
            def __init__(self, port1="COM4", rate=128000, timeout=0.01):
                self.device = serial.Serial(
                    port=port1,
                    baudrate=rate,
                    timeout=timeout
                )

            def writeValue(self, value):
                self.device.write(f"WRITE {value}\n".encode())

        lh = LabHackers()
  Routine routine_1
    CodeComponent fb_code
      Code Type = Py
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no key_resp component found - look at the Std out window for info'
        fb_col = 'black'

        try:
            if key_resp.corr:
                fb_text = 'Correct!'
                fb_col = 'green'
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')
    TextComponent fb
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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  Routine times_start
    TextComponent text_3
      letterHeight = 0.05
      pos = (0,0.3)
      startVal [time (s)] = 0.0
      text = You`ll have to press space bar when you feel the next amount of seconds have elapsed :
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $Value
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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      text:
        The time will start since the moment you
        press the space bar as well. In addition you are gonna start listenning music
    CodeComponent Trigger_triggering
      Code Type = Auto->JS
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      End Experiment:
        port.close()
      End Routine:
        portecg.write(str.encode("1"))
    CodeComponent triggeringeeg
      Code Type = Auto->JS
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      Begin Routine:
        lh.writeValue(2)
      End Routine:
        lh.writeValue(8)
    CodeComponent music_starrt
      Code Type = Auto->JS
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      End Routine:
        import os

        my_path="C:/Users/carelab/Desktop/Erik/stimuli/sbject"
        arr=os.listdir(my_path)
        random_song = random.choice(arr)
        sound_1 = sound.Sound(f'C:/Users/carelab/Desktop/Erik/stimuli/sbject/{random_song}', secs=-1, stereo=True, hamming=True,
            name='sound_1')


        if cond==0.1:

            sound_1.setVolume(1.0)

        if cond==0.1:
            if sound_1.status == NOT_STARTED:

                sound_1.play(when=win)
  Routine Estimation
  Routine t_2
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    KeyboardComponent Stroop_response
      allowedKeys = 'r' , 'b' , 'y' , 'g'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent text_5
      letterHeight [set every repeat] = cond
      pos = (0, 0.40)
      startVal [time (s)] = 0.0
      text [set every frame] = $Value
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    TextComponent stopb
      letterHeight [set every repeat] = cond
      pos = (0, -0.40)
      startVal [time (s)] = 0.0
      text [set every frame] = $Value
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    TextComponent stopl
      letterHeight [set every repeat] = cond
      ori = 90
      pos = (-0.75, 0)
      startVal [time (s)] = 0.0
      text [set every frame] = $Value
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    TextComponent stopr
      letterHeight [set every repeat] = cond
      ori = -90
      pos = (0.75, 0)
      startVal [time (s)] = 0.0
      text [set every frame] = $Value
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    CodeComponent Reminders
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Routine:
        re=sorted([random.randint(0,120) for i in range(20)])
      Each Frame:
        if (t>=re[0]) & (t<re[1]):
            text_5.contrast =1
            stopb.contrast =1
            stopl.contrast =1
            stopr.contrast =1
        if (t>=re[1]) & (t<re[2]):
            text_5.contrast =0
            stopb.contrast =0
            stopl.contrast =0
            stopr.contrast =0
        if (t>=re[2]) & (t<re[3]):
            text_5.contrast =1
            stopb.contrast =1
            stopl.contrast =1
            stopr.contrast =1
        if (t>=re[3]) & (t<re[4]):
            text_5.contrast =0
            stopb.contrast =0
            stopl.contrast =0
            stopr.contrast =0
        if (t>=re[4]) & (t<re[5]):
            text_5.contrast =1
            stopb.contrast =1
            stopl.contrast =1
            stopr.contrast =1
        if (t>=re[5]) & (t<re[6]):
            text_5.contrast =0
            stopb.contrast =0
            stopl.contrast =0
            stopr.contrast =0
        if (t>=re[6]) & (t<re[7]):
            text_5.contrast =1
            stopb.contrast =1
            stopl.contrast =1
            stopr.contrast =1
        if (t>=re[7]) & (t<re[8]):
            text_5.contrast =0
            stopb.contrast =0
            stopl.contrast =0
            stopr.contrast =0
        if (t>=re[8]) & (t<re[9]):
            text_5.contrast =1
            stopb.contrast =1
            stopl.contrast =1
            stopr.contrast =1
        if (t>=re[10]) & (t<re[11]):
            text_5.contrast =0
            stopb.contrast =0
            stopl.contrast =0
            stopr.contrast =0
        if (t>=re[11]) & (t<re[12]):
            text_5.contrast =1
            stopb.contrast =1
            stopl.contrast =1
            stopr.contrast =1
        if (t>=re[12]) & (t<re[13]):
            text_5.contrast =0
            stopb.contrast =0
            stopl.contrast =0
            stopr.contrast =0
        if (t>=re[13]) & (t<re[14]):
            text_5.contrast =1
            stopb.contrast =1
            stopl.contrast =1
            stopr.contrast =1
        if (t>=re[14]) & (t<re[15]):
            text_5.contrast =0
            stopb.contrast =0
            stopl.contrast =0
            stopr.contrast =0
        if (t>=re[15]) & (t<re[16]):
            text_5.contrast =1
            stopb.contrast =1
            stopl.contrast =1
            stopr.contrast =1
        if (t>=re[16]) & (t<re[17]):
            text_5.contrast =0
            stopb.contrast =0
            stopl.contrast =0
            stopr.contrast =0
        if (t>=re[17]) & (t<re[18]):
            text_5.contrast =1
            stopb.contrast =1
            stopl.contrast =1
            stopr.contrast =1
        if (t>=re[18]) & (t<re[19]):
            text_5.contrast =0
            stopb.contrast =0
            stopl.contrast =0
            stopr.contrast =0
        if (t>=re[19]):
            text_5.contrast = 1
            stopb.contrast =1
            stopl.contrast =1
            stopr.contrast =1
    TextComponent text_6
      color [set every repeat] = $color
      contrast = 0
      letterHeight [set every repeat] = cond
      opacity = 0
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    CodeComponent force_finish_sb
      Code Type = Auto->JS
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      End Routine:
        if key_resp_2.keys is not None and len(key_resp_2.keys)>0 :
                distractor.finished=1
  Routine end_sound
    CodeComponent Endmusic
      Code Type = Auto->JS
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      Begin Routine:
        if cond==0.1:
            sound_1.stop()
  Routine baseline
    TextComponent text_7
      letterHeight = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 200
      text = A
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    KeyboardComponent key_resp_9
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome_message
  Routine baseline
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/carelab/Desktop/Erik/resources/p1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Psubj', 1), ('Attribute', 'est1'), ('Value', 105), ('cond', 2), ('Unique', None)]),
      OrderedDict([('Psubj', 1), ('Attribute', 'est2'), ('Value', 30), ('cond', 1), ('Unique', None)]),
      OrderedDict([('Psubj', 1), ('Attribute', 'est3'), ('Value', 120), ('cond', 1), ('Unique', None)]),
      OrderedDict([('Psubj', 1), ('Attribute', 'est4'), ('Value', 30), ('cond', 1), ('Unique', None)]),
      OrderedDict([('Psubj', 1), ('Attribute', 'est5'), ('Value', 105), ('cond', 2), ('Unique', None)]),
      OrderedDict([('Psubj', 1), ('Attribute', 'est6'), ('Value', 120), ('cond', 1), ('Unique', None)]),
      OrderedDict([('Psubj', 1), ('Attribute', 'est7'), ('Value', 120), ('cond', 2), ('Unique', None)]),
      OrderedDict([('Psubj', 1), ('Attribute', 'est8'), ('Value', 60), ('cond', 2), ('Unique', None)]),
      OrderedDict([('Psubj', 1), ('Attribute', 'est9'), ('Value', 30), ('cond', 2), ('Unique', None)]),
      OrderedDict([('Psubj', 1), ('Attribute', 'est10'), ('Value', 60), ('cond', 2), ('Unique', None)]),
      OrderedDict([('Psubj', 1), ('Attribute', 'est11'), ('Value', 105), ('cond', 1), ('Unique', None)]),
      OrderedDict([('Psubj', 1), ('Attribute', 'est12'), ('Value', 30), ('cond', 2), ('Unique', None)]),
      OrderedDict([('Psubj', 1), ('Attribute', 'est13'), ('Value', 60), ('cond', 1), ('Unique', None)]),
      OrderedDict([('Psubj', 1), ('Attribute', 'est14'), ('Value', 105), ('cond', 2), ('Unique', None)]),
      OrderedDict([('Psubj', 1), ('Attribute', 'est15'), ('Value', 105), ('cond', 1), ('Unique', None)])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
    Routine times_start
    LoopInitiator distractor loopType="TrialHandler"
      conditionsFile = C:/Users/carelab/Desktop/Erik/resources/stroop.xlsx
      isTrials = False
      loopType = random
      nReps = 25
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      conditions:
        [{'word': 'RED', 'color': 'red', 'correct': 'r'},
        {'word': 'BLUE', 'color': 'red', 'correct': 'r'},
        {'word': 'BLUE', 'color': 'blue', 'correct': 'b'},
        {'word': 'RED', 'color': 'red', 'correct': 'r'},
        {'word': 'RED', 'color': 'red', 'correct': 'r'},
        {'word': 'RED', 'color': 'blue', 'correct': 'b'},
        {'word': 'BLUE', 'color': 'blue', 'correct': 'b'},
        {'word': 'RED', 'color': 'red', 'correct': 'r'},
        {'word': 'BLUE', 'color': 'red', 'correct': 'r'},
        {'word': 'BLUE', 'color': 'blue', 'correct': 'b'},
        {'word': 'RED', 'color': 'red', 'correct': 'r'},
        {'word': 'RED', 'color': 'red', 'correct': 'r'},
        {'word': 'BLUE', 'color': 'blue', 'correct': 'b'},
        {'word': 'BLUE', 'color': 'blue', 'correct': 'b'},
        {'word': 'RED', 'color': 'red', 'correct': 'r'},
        {'word': 'BLUE', 'color': 'red', 'correct': 'r'},
        {'word': 'BLUE', 'color': 'blue', 'correct': 'b'},
        {'word': 'RED', 'color': 'red', 'correct': 'r'},
        {'word': 'BLUE', 'color': 'red', 'correct': 'r'},
        {'word': 'RED', 'color': 'blue', 'correct': 'b'}]
      Routine t_2
    LoopTerminator distractor
    Routine end_sound
  LoopTerminator trials
  Routine Welcome_message
